//************************************************
// FILE NAME : connect.hoc
// 2015.04.28
// Heewon Park
//************************************************

//************************************************
// MODIFICATION HISTORY
//************************************************
//
//
//


//************************************************
// FUNCTION LIST
//************************************************
//
//************************************************

{load_file("loadinfo.hoc")}

objref rnclist
rnclist = new List()
proc mkPreSynapseOnRN(){local i, gid_base localobj syn, nil, nc
    gid_base = $1
    if(pc.id==0) print "(syn_gid, pc.id)"
    for i=0, rns.count()-1{
	//print i
	gid_cnt  = 0
	forsec rns.object(i).axonlist{
	    nc = new NetCon(&v(0.5),nil) 
	    nc.threshold = 1
	    syn_gid = calcSyngid(gid_base, gid_cnt, i)
	    pc.set_gid2node(syn_gid,pc.id)
	    pc.cell(syn_gid, nc)
	    rnclist.append(nc)
	    //printf("(%d, %d)\t",syn_gid, pc.id)
	    gid_cnt += 1
	}
    }
    printf("Max synapse gid %d\n",syn_gid)
}
func calcSyngid(){local base, cnt,gid,cellcnt,wholecnt,cnt2
    base = $1
    cnt  = $2//dendrite number conuter
    cnt2 = $3//cell number counter
    wholecnt = 0
    cellcnt  = 0
    for i=0, pc.id-1{
	cellcnt += CELLM.x[i][2]
    }
    gid = base + cnt*NRN + cellcnt + cnt2
    return gid
}

func calcSrcgid(){local base,syn_cnt, gid
    base =    $1
    syn_cnt = $2
    cnt  = $3
    gid = base + syn_cnt + cnt*NRN //this equation should be changed when i make this network more bigger
    //just for the test
    return gid
}
objref nclist_RN
nclist_RN = new List()
proc mkPostSynapseOfRN(){local i,j,gid_base,src_gid localobj target, syn, nc
    gid_base = $1
    print gid_base
    for i=0, NPN+NLN-1{
	if(pc.gid_exists(i)){
	    target = pc.gid2obj(i)
	    loadSynapseInfo(target, target.synpath, 1)
	    target.mkSynapses(target.fromRNsyn)
	    print "end load synapse info"
	    for j=0, target.synlist.count()-1{
		syn = target.synlist.o(j)
		src_gid = calcSrcgid(gid_base, j, i)
		//print "src_gid ", src_gid
		nc  = pc.gid_connect(src_gid, syn)
		//nc.delay  = 1.0
		//nc.weight = 1.0
		nclist_RN.append(nc)
	    }
	}
    }
}

proc connectRNtoOthers(){\
    local gid_base
    gid_base = 1000000
    mkPreSynapseOnRN(gid_base)
    pc.barrier()
    mkPostSynapseOfRN(gid_base)
    pc.barrier()
}
/*
proc setSynapseInfo(){\
    local i\
    localobj cell
    for i=0, NPN+NLN-1{
	if(pc.gid_exists(i)){
	    cell = pc.gid2obj(i)
	    loadSynapseInfo(cell)
	}
    }
}
*/

_pre_nid  = 0
_post_nid = 0
_pre_comp = 0
_post_comp = 0
objref pre_comps,post_comps
objref syntypes//types 1 inhibition 2 excitation, synapse type
objref gidVec
proc readSynapseList(){\
    local nid, nconnect, i\
    localobj synf,strobj,pre,post,nc,nil,syn

    strdef buf, ctype
    strdef syn_filename
    
    pre_comps = new Vector()
    post_comps = new Vector()
    syntypes = new Vector()
    gidVec = new Vector()
    syn_filename = $s1
    gid_base = $2
    gid_cnt  = 0

    synf = new File()
    
    if(synf.ropen(syn_filename) != 1){
	printf("ERROR : File was not found. (%s)\n",syn_filename)
	return(-1) 
    }

    while(synf.scanstr(buf)!=-1){
	if(strcmp("#",buf)==0){
	    continue
	}else if(strcmp("$",buf)==0){
	    synf.gets(buf)
	    sscanf(buf,"%s %d\n",ctype,&nid)
	    if(strcmp("PRE_CELL",ctype)==0){
		_pre_nid  = nid
	    }else if(strcmp("POST_CELL",ctype)==0){
		_post_nid = nid
	    }else if(strcmp("NCONNECTIONS",ctype)==0){
		nconnect = nid
		for(i=0;i<nconnect;i+=1){
		    synf.gets(buf)
		    sscanf(buf,"%d %d\n",&_pre_comp, &_post_comp)
		    printf("%d %d\n",_pre_comp, _post_comp)
		    pre_comps.append(_pre_comp)
		    post_comps.append(_post_comp)
		    gidVec.append(gid_base+gid_cnt)
		    if((_pre_nid-(_pre_nid%100))/100==3){
			print _pre_nid, _pre_comp, _post_nid,_post_comp,"Inhibition"
			syntypes.append(1)
		    }else if((_pre_nid-(_pre_nid%100))/100==2){
			print _pre_nid, _pre_comp, _post_nid,_post_comp,"Excitation"
			syntypes.append(2)
		    }else{
			print _pre_nid
			print "SOMETHINGS WRONG IN READ SYNAPSE LIST"
			return (-1)
		    }
		    gid_cnt += 1
		}
	    }
	}
    }
}

objref nclist_NtoN
nclist_NtoN = new List()
proc makePreSynapse(){local i, pre_cell, gid localobj pre,nc,nil
    pre_cell = $1
    if(pc.gid_exists(pre_cell)){
	pre = pc.gid2obj(pre_cell)
	print "SectionNum ", pre.SectionNum
	for i=0, pre_comps.size()-1{
	    nc = pre.connect2target(pre_comps.x[i],nil)
	    pc.set_gid2node(gidVec.x[i],pc.id)
	    pc.cell(gidVec.x[i],nc)
	    nclist_NtoN.append(nc)
	}
    }
}

proc makePostSynapse(){local i, post_cell,rev_potential, delay, weight,gid localobj post,nc,syn
    post_cell = $1
    delay  = $2
    weight = $3
    
    if(pc.gid_exists(post_cell)){
	post = pc.gid2obj(post_cell)
	for i=0, post_comps.size()-1{
	    if(syntypes.x[i]==1){
		rev_potential = -75
	    }else if(syntypes.x[i]==2){
		rev_potential = 0
	    }else{
		print "makePostSynapse : Type error"
		return
	    }
	    syn = post.mkSyn(post_comps.x[i],rev_potential)
	    nc = pc.gid_connect(gidVec.x[i], syn)
	    nc.delay = delay
	    nc.weight = weight
	    nclist_NtoN.append(nc)
	}
    }
}

//----------------------------------------------------
// Connect Neurons to Neurons
// for example ln to ln, ln to pn
proc connectNtoN(){\
    local i, j,gid_base\
    localobj str,nil,pre,post

    strdef _syn_path
    gid_base = 2000000

    for(i=0;i<NPN;i=i+1){
	print "error pn"
	loadSynapseInfo(nil,pn_path[i].synpath,2)
    }
    for(i=0;i<NLN;i=i+1){
	print "error ln"
	loadSynapseInfo(nil,ln_path[i].synpath,2)
    }
    for(j=0;j<SynPathList.count();j+=1){
	readSynapseList(SynPathList.o(j).synpath,gid_base)
	pc.barrier()
	makePreSynapse(SynPathList.o(j).pregid)
	pc.barrier()
	makePostSynapse(SynPathList.o(j).postgid,1,1)
	if(pre_comps.size() == post_comps.size()){
	    gid_base += pre_comps.size()
	}else{
	    print "ERROR IN CONNECTNTON"
	    return (-1)
	}
   }
}
