{load_file("nrngui.hoc")}
{load_file("stdlib.hoc")}
{load_file("CellSwc3.hoc")}
//{load_file("CellSwc.hoc")}

STOPTIME = 20000

objref c
c = new CellSwc("../input/swc/rn0514/orn0010.swc",0,0,0,0)
//c = new CellSwc("./swc/070224_SN-23-R.swc",0,0,0,0)
c.insertHH_RN()
/*
forall{
    diam = 2
    //insert pas
    Ra   = 15
    insert hh
    gnabar_hh = 0.0001
    gkbar_hh = 0.01
}

c.Dend[0]{
    insert hh
    gnabar_hh = 0.0001
    gkbar_hh = 0.01
}
*/

//c.setIntermitStim_gaus(0,0,10000000,300,0,100,0.0)
//c.mkIclamp(0)

strdef spiketiming
//sprint(spiketiming,"./spiketiming/spiketiming%d.dat",666)
sprint(spiketiming,"../input/spiketiming/40stim/spiketiming%d.dat",999)
c.setIClamp(STOPTIME,dt,spiketiming)
//c.mkIclamp(0)
/*
objref st
c.Dend[0] st = new intermitStimGaus(0.5)
st.del    = 0
st.Imax  = 100
st.interval = 100
st.tau_fall = 400
st.Imax2    = 100
st.nStim    = 10
st.sigma_o  = 0.0
*/
objref tvec, vec
tvec = new Vector()
vec  = new Vector()
tvec.record(&t)
vec.record(&c.Dend[0].v(0.5))


/*--- shape plot ---*/
/*
objref sh
sh = new PlotShape(1)
sh.scale(0,0)

sh.size(-300, 300, -300, 300)
*/
//sh.size(-3000, 3000, -3000, 3000)
//sh.show(0)
//sh.exec_menu("Shape Plot")
//sh.view(-100, -100,200, 200,50,50,1024,1024)

xopen("single.ses")
tstop = STOPTIME
//run()
/*
print "printfile"
objref mt, file
mt = new Matrix()
file = new File()

strdef filename
mt.resize(tvec.size(),2)
mt.setcol(0,tvec)
mt.setcol(1,vec)
sprint(filename,"./record/Voltagerecord.txt")
file.wopen(filename)
mt.fprint(file,"%5.5f\t")
file.close()

for i=0, tvec.size()-1{
    printf("%5.5f\t%5.5f\n",tvec.x[i],vec.x[i])
}


access c.Dend[110]
c.Dend[110]  psection()
//c.Dend[0].diam = 10
print c.Dend[0].diam
c.Dend[0]  psection()
*/