//************************************************
// FILE NAME : stim.hoc
// 2015.05.13
// Heewon Park
//************************************************

//************************************************
// MODIFICATION HISTORY
//************************************************
//
//
//

//************************************************
// FUNCTION LIST
//************************************************
//
//
//************************************************

//objref stlist
proc mkIntermitStim(){local i localobj st
    //stlist = new List()
    for(i=0; i<rns.count();i=i+1){
	print "mkIntermitStim"
	rns.object(i).setIntermitStim_gaus(0,0,20000,300,10000,10,0.0)
	//stlist.append(st)
    }
}

objref iclist
iclist = new List()
proc mkIclamp(){local i localobj ic
    iclist = new List()
    for(i=0; i<rns.count();i=i+1){
	ic = rns.o(i).mkIclamp(0)
	iclist.append(ic)
	ic = rns.o(i).mkIclamp(0,2,6,40)
	iclist.append(ic)
	if(i == 0){
	    psection()
	}
    }
}

proc mkIclamp_pn(){local i localobj ic
    iclist = new List()
    for(i=0; i<pns.count();i=i+1){
	ic = pns.o(i).mkIclamp(0,10,10,5)
	iclist.append(ic)
	ic = pns.o(i).mkIclamp(100,2,6,40)
	iclist.append(ic)
	ic = pns.o(i).mkIclamp(200,10,10,80)
	iclist.append(ic)
	ic = pns.o(i).mkIclamp(300,10,10,120)
	iclist.append(ic)
	ic = pns.o(i).mkIclamp(400,10,10,160)
	iclist.append(ic)
	ic = pns.o(i).mkIclamp(600,10,10,200)
	iclist.append(ic)
	ic = pns.o(i).mkIclamp(700,10,10,250)
	iclist.append(ic)
	if(i == 0){
	    psection()
	}
    }
}

proc mkIclamp_ln(){local i localobj ic
    iclist = new List()
    for(i=0; i<lns.count();i=i+1){
	ic = lns.o(i).mkIclamp(0,10,10,5)
	iclist.append(ic)
	ic = lns.o(i).mkIclamp(1000,2,6,40)
	iclist.append(ic)
	ic = lns.o(i).mkIclamp(2000,10,10,80)
	iclist.append(ic)
	ic = lns.o(i).mkIclamp(3000,10,10,120)
	iclist.append(ic)
	ic = lns.o(i).mkIclamp(4000,10,10,160)
	iclist.append(ic)
	ic = lns.o(i).mkIclamp(6000,10,10,200)
	iclist.append(ic)
	ic = lns.o(i).mkIclamp(7000,10,10,250)
	iclist.append(ic)
	ic = lns.o(i).mkIclamp(8000,10,10,300)
	iclist.append(ic)
	ic = lns.o(i).mkIclamp(9000,10,10,350)
	iclist.append(ic)
	if(i == 0){
	    psection()
	}
    }
}

proc mkIclamp_ln2(){local i localobj ic
    iclist = new List()
    
    for(i=0; i<lns.count();i=i+1){
	if(lns.o(i).swcid == 0){
	    ic = lns.o(i).mkIclamp(0,10,10,0)
	    iclist.append(ic)
	    ic = lns.o(i).mkIclamp(1000,10,10,10)
	    iclist.append(ic)
	    ic = lns.o(i).mkIclamp(2000,10,10,20)
	    iclist.append(ic)
	    ic = lns.o(i).mkIclamp(3000,10,10,30)
	    iclist.append(ic)
	    ic = lns.o(i).mkIclamp(4000,10,10,40)
	    iclist.append(ic)
	    ic = lns.o(i).mkIclamp(6000,10,10,50)
	    iclist.append(ic)
	    ic = lns.o(i).mkIclamp(7000,10,10,60)
	    iclist.append(ic)
	    ic = lns.o(i).mkIclamp(8000,10,10,70)
	    iclist.append(ic)
	    ic = lns.o(i).mkIclamp(9000,10,10,80)
	    iclist.append(ic)
	    if(i == 0){
		psection()
	    }
	}
    }
}

proc mkIclamp_debug(){local cmpt, dur, amp, del localobj ic, cell
    cell = $o1
    cmpt = $2
    dur  = $3
    amp  = $4
    del  = $5
    ic = cell.mkIclamp(cmpt,dur,amp,del)
    iclist.append(ic)
}

proc mkSerialStim(){local i localobj rnd
    rnd = new Random(pc.id)
    strdef spiketiming
    strdef dir
    dir = $s1
    for(i=0; i<rns.count();i=i+1){
	/*
	if(STOPTIME<1200){
	    sprint(spiketiming,"../input/spiketiming/spiketiming%d.dat",int(rnd.uniform(0,999)))
	}else{
	    sprint(spiketiming,"../input/spiketiming/40stim/spiketiming%d.dat",int(rnd.uniform(0,999)))
	}
	*/
	sprint(spiketiming,"%sspt%03d.dat",dir,int(rnd.uniform(0,999)))
	rns.o(i).setIClamp(STOPTIME,dt,spiketiming)
	//rns.o(i).setIClamp_with_Latency(STOPTIME,dt,spiketiming,START_TIME+pc.nhost*i+pc.id)
    }
}

proc mkSerialStim_debug(){local i localobj rnd
    strdef spiketiming
    for(i=0; i<rns.count();i=i+1){
	sprint(spiketiming,"../input/spiketiming/spiketiming%d.dat",300)
	rns.o(i).setIClamp(STOPTIME,dt,spiketiming)
	//rns.o(i).setIClamp_with_Latency(STOPTIME,dt,spiketiming,START_TIME+pc.nhost*i+pc.id)
    }
}